[
 {
  "copyFiles": false,
  "socketPort": 5000,
  "acquisitionWizard": null,
  "amplitudeContrast": 0.1,
  "stackFrames": false,
  "runMode": 0,
  "voltage": 300.0,
  "movieSuffix": "frames.mrcs",
  "dataStreaming": false,
  "writeMoviesInProject": false,
  "fileTimeout": 30,
  "filesPath": "/dls/ebic/data/staff-scratch/Joshua/short_test/Micrographs/",
  "scannedPixelSize": 7.0,
  "filesPattern": "*.mrc",
  "object.label": "scipion - import movies",
  "magnification": "2000",
  "dosePerFrame": "1.6",
  "object.comment": "",
  "darkFile": null,
  "gainFile": "",
  "object.className": "ProtImportMovies",
  "samplingRate": "0.4",
  "inputIndividualFrames": false,
  "runName": null,
  "_useQueue": false,
  "deleteFrames": false,
  "sphericalAberration": 2.7,
  "doseInitial": 0.0,
  "numberOfIndividualFrames": "24",
  "haveDataBeenPhaseFlipped": false,
  "streamingSocket": false,
  "timeout": 43200,
  "object.id": "937",
  "importFrom": 0
 },
 {
  "hostName": "localhost",
  "extraParams": "",
  "runMode": 0,
  "useMotioncor2": true,
  "cropDimX": 0,
  "cropDimY": 0,
  "binFactor": 1.0,
  "doSaveMovie": false,
  "group": 1,
  "alignFrame0": 1,
  "doMagCor": false,
  "object.label": "motioncorr - motioncorr alignment",
  "gpuMsg": "True",
  "_useQueue": false,
  "extraParams2": "",
  "numberOfMpi": 1,
  "tol": 0.5,
  "sumFrameN": 0,
  "object.comment": "",
  "scaleMaj": 1.0,
  "sumFrame0": 1,
  "object.className": "ProtMotionCorr",
  "doApplyDoseFilter": true,
  "numberOfThreads": 3,
  "computeAllFramesAvg": false,
  "doSaveAveMic": true,
  "runName": null,
  "scaleMin": 1.0,
  "alignFrameN": 0,
  "doComputeMicThumbnail": true,
  "patchX": 5,
  "patchY": 5,
  "angDist": 0.0,
  "useAlignToSum": true,
  "cropOffsetX": 0,
  "cropOffsetY": 0,
  "useEst": true,
  "doComputePSD": true,
  "inputMovies": "937.outputMovies",
  "doSaveUnweightedMic": true,
  "gpuList": "0 1",
  "object.id": "992"
 },
 {
  "doHighRes": false,
  "_useQueueForJobs": true,
  "ctfDownFactor": 1.0,
  "runMode": 0,
  "phaseShiftH": 180.0,
  "recalculate": false,
  "gpuList": "0 1",
  "convsize": 85,
  "minDefocus": 0.25,
  "lowRes": 0.05,
  "object.label": "gctf - CTF estimation on GPU",
  "overlap": 0.5,
  "maxDefocus": 4.0,
  "phaseShiftT": 0,
  "sqliteFile": null,
  "phaseShiftS": 10.0,
  "_useQueue": false,
  "highRes": 0.35,
  "doBasicRotave": false,
  "astigmatism": 100.0,
  "object.className": "ProtGctf",
  "windowSize": "512",
  "plotResRing": true,
  "runName": null,
  "doValidate": false,
  "doEPA": false,
  "HighResH": 4.0,
  "inputMicrographs": "992.outputMicrographs",
  "object.comment": "",
  "HighResL": 15.0,
  "doPhShEst": 0,
  "HighResBf": 50,
  "bfactor": 150,
  "object.id": "1053",
  "phaseShiftL": 0.0,
  "numberOfThreads": 3,
  "numberOfMpi": 1,
  "EPAsmp": 4
 },
 {
  "resamplePix": true,
  "hostName": "localhost",
  "ctfDownFactor": 1.0,
  "runMode": 0,
  "minPhaseShift": 0.0,
  "recalculate": false,
  "numberOfMpi": 1,
  "useCtffind4": true,
  "minDefocus": 0.25,
  "lowRes": 0.05,
  "slowSearch": false,
  "object.label": "grigoriefflab - ctffind-4",
  "maxDefocus": 4.0,
  "maxPhaseShift": 3.15,
  "sqliteFile": null,
  "highRes": 0.12,
  "object.comment": "",
  "astigmatism": 100.0,
  "object.className": "ProtCTFFind",
  "windowSize": "512",
  "numberOfThreads": 4,
  "runName": null,
  "_useQueue": false,
  "inputMicrographs": "992.outputMicrographs",
  "object.id": "1111",
  "findPhaseShift": 0,
  "stepPhaseShift": 0.2
 },
 {
  "doMail": false,
  "publishCmd": "",
  "maxDefocus": 40000.0,
  "swapAlert": 101.0,
  "samplingInterval": 60,
  "astigmatism": 0.2,
  "minDefocus": 1000.0,
  "object.className": "ProtMonitorSummary",
  "emailFrom": "from@from.fakeadress.com",
  "smtp": "smtp.fakeadress.com",
  "object.label": "scipion - monitor summary",
  "inputProtocols": ["1111", "937", "992"],
  "cpuAlert": 101.0,
  "runMode": 0,
  "runName": null,
  "_useQueue": false,
  "memAlert": 101.0,
  "object.id": "1157",
  "emailTo": "to@to.fakeadress.com",
  "object.comment": "",
  "monitorTime": 30000.0
 },
 {
  "exclusive": false,
  "localSigmaDiam": 100,
  "writeSigma": false,
  "_useQueueForJobs": true,
  "localAvgMin": -1.0,
  "inputMicrographs": "992.outputMicrographsDoseWeighted",
  "writeCC": false,
  "runMode": 0,
  "advLabel": null,
  "threshold": 0.1,
  "localSigmaCutoff": 1.2,
  "highPass": 1000,
  "speed": 2,
  "localAvgMax": 1.0,
  "writeFilt": false,
  "invertTemplatesContrast": false,
  "object.label": "gautomatch - auto-picking",
  "angStep": 5,
  "lowPass": 30,
  "object.className": "ProtGautomatch",
  "object.comment": "",
  "preFilt": false,
  "localAvgDiam": 100,
  "runName": null,
  "_useQueue": false,
  "writeBgSub": false,
  "advanced": true,
  "prehighPass": 1000,
  "prelowPass": 8,
  "writeMsk": false,
  "minDist": 300,
  "GPUId": 0,
  "writeBg": false,
  "object.id": "317",
  "particleSize": 250
 },
 {
  "object.className": "ProtMonitorISPyB",
  "object.id": "1203",
  "object.label": "ispyb_monitor monitor to ISPyB 2",
  "object.comment": "",
  "_useQueue": false,
  "runName": null,
  "runMode": 0,
  "inputProtocols": ["937", "992", "1111"],
  "samplingInterval": 60,
  "visit": "somevisit",
  "db": 0
 }
]
